run("Define dataset ...", "define_dataset=[Automatic Loader (Bioformats based)] project_filename=dataset.xml path=Z:/Data/Analyzed/2024-03-08-Hongyu-Covid_LN/starfinder-test/images/fused/sample1/DAPI exclude=10 pattern_0=Tiles modify_voxel_size? voxel_size_x=0.19 voxel_size_y=0.19 voxel_size_z=0.35 voxel_size_unit=µm move_tiles_to_grid_(per_angle)?=[Move Tile to Grid (Macro-scriptable)] grid_type=[Down & Right             ] tiles_x=8 tiles_y=9 tiles_z=1 overlap_x_(%)=10 overlap_y_(%)=10 overlap_z_(%)=10 keep_metadata_rotation how_to_load_images=[Re-save as multiresolution N5] load_raw_data_virtually dataset_save_path=Z:/Data/Analyzed/2024-03-08-Hongyu-Covid_LN/starfinder-test/images/fused/sample1/DAPI compression=Gzip subsampling_factors=[{ {1,1,1}, {2,2,2}, {4,4,4}, {8,8,8} }] n5_block_sizes=[{ {128,128,64}, {128,128,64}, {128,128,64}, {128,128,64} }] number_of_threads=16");
